PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = cardsorting
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Routines
  Routine trial_block1
    CodeComponent rule_block1
      Code Type = Auto->JS
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      Begin Routine:
        if stim_type == 'animal':
            corr_ans = 'left'
        else:
            corr_ans = 'right'
    ImageComponent image_block1
      image [set every repeat] = $stim_file
      ori [set every repeat] = $stim_orientation
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
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    KeyboardComponent resp_block1
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      storeCorrect = True
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  Routine end
    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2
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      text:
        A kísérlet véget ért.

        Köszönjük a részvételt!
  Routine trial_block2
    CodeComponent rule_block2
      Code Type = Auto->JS
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      Begin Routine:
        if stim_type == 'animal':
            corr_ans = 'right'
        else:
            corr_ans = 'left'
    ImageComponent image_block2
      image [set every repeat] = $stim_file
      ori [set every repeat] = $stim_orientation
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
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    KeyboardComponent resp_block2
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      storeCorrect = True
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  Routine instr_block1
    TextComponent i_block1_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.2
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      text:
        Üdv!

        A kísérletben állatok és élettelen tárgyak fognak megjelenni.

        Az első részben az állatok balra mennek, az élettelen tárgyak jobbra. Ha állatot látsz, nyomd meg a 'balra' nyilat, ha tárgyat, nyomd meg a 'jobbra' nyilat.

        Indulhat a kísérlet? Nyomd meg bármelyik gombot.
    KeyboardComponent i_block1_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_block2
    TextComponent i_block2_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.2
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      text:
        A következő blokkban a szabály megváltozik.

        Most, ha állatot látsz, a JOBBRA nyilat nyomd meg, ha élettelen tárgyat, akkor pedig a BALRA nyilat.

        Nyomj le egy tetszőleges billentyűt, ha kezdhetjük!
    KeyboardComponent i_block2_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_block3
    TextComponent i_block3_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.2
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      text:
        A következő blokkban a szabály ismét változik.

        Ha fejjel felfelé jelenik meg a kép, az állat BALRA megy, a tárgy JOBBRA.

        Ha fejjel lefelé jelenik meg, az állat JOBBRA megy és a tárgy BALRA.

        A továbbiakban már nem érkezik visszajelzés a válasz helyességéről.

        Ha indulhatunk, nyomj meg egy tetszőleges gombot!
    KeyboardComponent i_block3_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_block3
    CodeComponent rule_block3
      Code Type = Auto->JS
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      Begin Routine:
        if stim_orientation == 0:
            if stim_type == 'animal':
                corr_ans = 'left'
            else:
                corr_ans = 'right'
        else:
            if stim_type == 'animal':
                corr_ans = 'right'
            else:
                corr_ans = 'left'
    ImageComponent image_block3
      image [set every repeat] = $stim_file
      ori [set every repeat] = $stim_orientation
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
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    KeyboardComponent resp_block3
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      storeCorrect = True
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  Routine feedback_block1
    CodeComponent fb_rule_block1
      Code Type = Auto->JS
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      Begin Routine:
        if resp_block1.corr:
            feedback_str = 'Helyes válasz! Reakcióidő: %.3f s' %(resp_block1.rt)
        else:
            feedback_str = 'Helytelen válasz! Reakcióidő: %.3f s' %(resp_block1.rt)
    TextComponent fb_text_block1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_str
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  Routine feedback_block2
    CodeComponent fb_rule_block2
      Code Type = Auto->JS
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      Begin Routine:
        if resp_block2.corr:
            feedback_str = 'Helyes válasz! Reakcióidő: %.3f s' %(resp_block1.rt)
        else:
            feedback_str = 'Helytelen válasz! Reakcióidő: %.3f s' %(resp_block1.rt)
    TextComponent fb_text_block2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_str
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Flow
  Routine instr_block1
  LoopInitiator loop_block1 loopType="TrialHandler"
    conditionsFile = stim_unrotated.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('stim_file', 'alligator.png'), ('stim_type', 'animal'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'candle.png'), ('stim_type', 'object'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'cat.png'), ('stim_type', 'animal'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'dog.png'), ('stim_type', 'animal'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'house.png'), ('stim_type', 'object'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'rabbit.png'), ('stim_type', 'animal'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'rucksack.png'), ('stim_type', 'object'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'shoe.png'), ('stim_type', 'object'), ('stim_orientation', 0)])]
    Routine trial_block1
    Routine feedback_block1
  LoopTerminator loop_block1
  Routine instr_block2
  LoopInitiator loop_block2 loopType="TrialHandler"
    conditionsFile = stim_unrotated.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('stim_file', 'alligator.png'), ('stim_type', 'animal'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'candle.png'), ('stim_type', 'object'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'cat.png'), ('stim_type', 'animal'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'dog.jpg'), ('stim_type', 'animal'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'house.png'), ('stim_type', 'object'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'rabbit.jpg'), ('stim_type', 'animal'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'rucksack.png'), ('stim_type', 'object'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'shoe.png'), ('stim_type', 'object'), ('stim_orientation', 0)])]
    Routine trial_block2
    Routine feedback_block2
  LoopTerminator loop_block2
  Routine instr_block3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stim_rotated.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim_file', 'alligator.png'), ('stim_type', 'animal'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'candle.png'), ('stim_type', 'object'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'cat.png'), ('stim_type', 'animal'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'dog.jpg'), ('stim_type', 'animal'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'house.png'), ('stim_type', 'object'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'rabbit.jpg'), ('stim_type', 'animal'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'rucksack.png'), ('stim_type', 'object'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'shoe.png'), ('stim_type', 'object'), ('stim_orientation', 0)]),
      OrderedDict([('stim_file', 'alligator.png'), ('stim_type', 'animal'), ('stim_orientation', 180)]),
      OrderedDict([('stim_file', 'candle.png'), ('stim_type', 'object'), ('stim_orientation', 180)]),
      OrderedDict([('stim_file', 'cat.png'), ('stim_type', 'animal'), ('stim_orientation', 180)]),
      OrderedDict([('stim_file', 'dog.jpg'), ('stim_type', 'animal'), ('stim_orientation', 180)]),
      OrderedDict([('stim_file', 'house.png'), ('stim_type', 'object'), ('stim_orientation', 180)]),
      OrderedDict([('stim_file', 'rabbit.jpg'), ('stim_type', 'animal'), ('stim_orientation', 180)]),
      OrderedDict([('stim_file', 'rucksack.png'), ('stim_type', 'object'), ('stim_orientation', 180)]),
      OrderedDict([('stim_file', 'shoe.png'), ('stim_type', 'object'), ('stim_orientation', 180)])]
    Routine trial_block3
  LoopTerminator trials
  Routine end
